WorkflowBuilder(Version=2.8.4+2bab12753e452fa02540eb20e93664d41b112590)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> BciNoMovementDataSchema.Session.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.Session.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> BehaviorSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> BciNoMovementDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.Rig.BciNoMovementRig>)
    -> Take(Count=1)
    -> BehaviorSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> BciNoMovementDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.TaskLogic.BciNoMovementTaskLogic>)
    -> Take(Count=1)
    -> BehaviorSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> BehaviorSubject TaskLogicParameters

GroupWorkflow SessionStartTrigger
    SubscribeSubject TaskRunningState
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject StartLogging
    -> Delay(DueTime=PT2S)
    -> ReplaySubject StartExperiment(BufferSize=nil)
    -> Take(Count=1) => #5
    SubscribeSubject TaskRunningState
    -> BitwiseNot
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #9
    #5, #9 -> Concat
    -> Take(Count=2)
    -> Last
    -> Unit
    -> MulticastSubject EndExperiment
    -> WorkflowOutput

GroupWorkflow ZMQ
    SubscribeSubject SoftwareEvents
    -> AllenNeuralDynamics.AindBehaviorServices.DataTypes.SerializeToJson => #1
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Networking.ZmqPublisher)
    -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic)) => #4
    #1, #4 -> Bonsai.ZeroMQ.Publisher(ConnectionString=@tcp://localhost:5556, Topic=bci-no-movement)
    -> WorkflowOutput

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Networking.ZmqSubscriber)
    -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic))
    -> Bonsai.ZeroMQ.Subscriber(ConnectionString=@tcp://localhost:5557, Topic=bci-no-movement)
    -> MemberSelector(Selector=Last)
    -> Bonsai.ZeroMQ.ConvertToString

GroupWorkflow Init
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvents

    BooleanProperty(Value=false)
    -> BehaviorSubject TaskRunningState

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

GroupWorkflow Hardware
    GroupWorkflow HarpDevices
        IncludeWorkflow(Path=Extensions\HarpBehavior.bonsai)
        IncludeWorkflow(Path=Extensions\HarpLoadCells.bonsai)
        IncludeWorkflow(Path=Extensions\HarpTimestampGenerator3.bonsai)

    GroupWorkflow Manipulator
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> PropertyMapping(PortName(Selector=ComPort))
        -> AllenNeuralDynamics.Zaber.CreateZaberDevice(Name=ZaberMotor, PortName=COM10)
        -> BehaviorSubject Manipulator

        GroupWorkflow DetermineManipulatorAxis
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator)
            -> MemberSelector(Selector=SpoutAxis) => #2
            -> Condition XAxis => #3
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=WorkflowProperty<BciNoMovementDataSchema.Rig.Axis>(Value=X))
                -> WorkflowOutput
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator.XAxis) => #5
            #3, #5 -> WithLatestFrom => #6
            #2 -> Condition YAxis => #7
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=WorkflowProperty<BciNoMovementDataSchema.Rig.Axis>(Value=Y))
                -> WorkflowOutput
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator.YAxis) => #9
            #7, #9 -> WithLatestFrom => #10
            #2 -> Condition ZAxis => #11
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value) => #1
                #0, #1 -> Equal(Operand=WorkflowProperty<BciNoMovementDataSchema.Rig.Axis>(Value=Z))
                -> WorkflowOutput
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator.ZAxis) => #13
            #11, #13 -> WithLatestFrom => #14
            #6, #10, #14 -> Merge
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject ManipulatorSpoutAxis

        GroupWorkflow SetLimits
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator)
            -> MemberSelector(Selector=XAxis) => #2
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator)
            -> MemberSelector(Selector=YAxis) => #5
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator)
            -> MemberSelector(Selector=ZAxis) => #8
            #2, #5, #8 -> Merge
            -> CreateObservable SetSettings
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisAxis

                SubscribeSubject ThisAxis
                -> MemberSelector(Selector=Acceleration)
                -> GroupWorkflow Set => #5
                    WorkflowInput Source1
                    -> Condition => #1
                        WorkflowInput Source1
                        -> MemberSelector(Selector=HasValue)
                        -> WorkflowOutput
                    SubscribeSubject ThisAxis
                    -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #3
                    ExternalizedMapping(Setting, Units) => #4
                    #1, #3, #4 -> AllenNeuralDynamics.Zaber.SetSetting(PortName=ZaberMotor, Device=nil, Axis=0, Setting=accel, Units=Acceleration_MillimetresPerSecondSquared)
                    -> WorkflowOutput
                SubscribeSubject ThisAxis
                -> MemberSelector(Selector=Velocity)
                -> GroupWorkflow Set => #8
                    WorkflowInput Source1
                    -> Condition => #1
                        WorkflowInput Source1
                        -> MemberSelector(Selector=HasValue)
                        -> WorkflowOutput
                    SubscribeSubject ThisAxis
                    -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #3
                    ExternalizedMapping(Setting, Units) => #4
                    #1, #3, #4 -> AllenNeuralDynamics.Zaber.SetSetting(PortName=ZaberMotor, Device=nil, Axis=0, Setting=maxspeed, Units=Velocity_MillimetresPerSecond)
                    -> WorkflowOutput
                SubscribeSubject ThisAxis
                -> MemberSelector(Selector=UpperLimit)
                -> GroupWorkflow Set => #11
                    WorkflowInput Source1
                    -> Condition => #1
                        WorkflowInput Source1
                        -> MemberSelector(Selector=HasValue)
                        -> WorkflowOutput
                    SubscribeSubject ThisAxis
                    -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #3
                    ExternalizedMapping(Setting, Units) => #4
                    #1, #3, #4 -> AllenNeuralDynamics.Zaber.SetSetting(PortName=ZaberMotor, Device=nil, Axis=0, Setting=limit.max, Units=Length_Millimetres)
                    -> WorkflowOutput
                SubscribeSubject ThisAxis
                -> MemberSelector(Selector=LowerLimit)
                -> GroupWorkflow Set => #14
                    WorkflowInput Source1
                    -> Condition => #1
                        WorkflowInput Source1
                        -> MemberSelector(Selector=HasValue)
                        -> WorkflowOutput
                    SubscribeSubject ThisAxis
                    -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #3
                    ExternalizedMapping(Setting, Units) => #4
                    #1, #3, #4 -> AllenNeuralDynamics.Zaber.SetSetting(PortName=ZaberMotor, Device=nil, Axis=0, Setting=limit.min, Units=Length_Millimetres)
                    -> WorkflowOutput
                #5, #8, #11, #14 -> Zip
                -> WorkflowOutput
            -> Concat
            -> Last
            -> BooleanProperty(Value=true)
            -> BehaviorSubject _DoneSettingAxis => #14
            SubscribeSubject Manipulator => #15
            #14, #15 -> SubscribeWhen

        GroupWorkflow GenericMessages
            BehaviorSubject<BciNoMovementDataSchema.Rig.ZaberGenericCommand> SendManipulatorMessage
            -> SelectMany SendMessages
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Msg

                SubscribeSubject Msg
                -> MemberSelector(Selector=Command) => #4
                SubscribeSubject Msg
                -> MemberSelector(Selector=Axis)
                -> PropertyMapping(Axis) => #7
                #4, #7 -> AllenNeuralDynamics.Zaber.GenericCommand(PortName=ZaberMotor, Device=nil, Axis=nil)
                -> WorkflowOutput
            -> BehaviorSubject ManipulatorResponses
            -> WorkflowOutput

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator.GenericCommands)
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Count)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Merge
            -> MulticastSubject SendManipulatorMessage => #8
            SubscribeSubject _DoneSettingAxis
            -> Condition => #10
                WorkflowInput Source1
                -> WorkflowOutput
            #8, #10 -> SubscribeWhen

        GroupWorkflow Homing
            BehaviorSubject<System.Reactive.Unit> HomingRoutine
            -> CreateObservable HomingRoutine
                IntProperty(Value=0) => #0
                SubscribeSubject ManipulatorSpoutAxis
                -> MemberSelector(Selector=Item2)
                -> PropertyMapping(Device(Selector=DeviceIndex), Axis(Selector=AxisIndex)) => #3
                #0, #3 -> AllenNeuralDynamics.Zaber.Home(PortName=ZaberMotor, Device=0, Axis=nil) => #4
                SubscribeSubject ManipulatorSpoutAxis
                -> MemberSelector(Selector=Item2)
                -> PropertyMapping(Device(Selector=DeviceIndex), Axis(Selector=AxisIndex)) => #7
                #4, #7 -> AllenNeuralDynamics.Zaber.WaitUntilIdle(PortName=ZaberMotor, Device=0, Axis=nil)
                -> Take(Count=1)
                -> WorkflowOutput
            -> Switch
            -> BooleanProperty(Value=true)
            -> BehaviorSubject IsHomed
            -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=0)
            -> MulticastSubject GoTo3dPosition

            SubscribeSubject IsHomed
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ManipulatorIsHomed)
            -> MulticastSubject SoftwareEvents

        GroupWorkflow Park
            BooleanProperty(Value=true)
            -> BehaviorSubject ParkState

            SubscribeSubject ParkState => #2
            -> AllenNeuralDynamics.Zaber.Park(PortName=ZaberMotor, Device=0, Axis=nil) => #3
            #2 -> AllenNeuralDynamics.Zaber.Park(PortName=ZaberMotor, Device=1, Axis=nil) => #4
            #3, #4 -> Zip
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ManipulatorParkState)
            -> MulticastSubject SoftwareEvents

        GroupWorkflow Stop
            BehaviorSubject<System.Reactive.Unit> StopManipulator => #0
            -> AllenNeuralDynamics.Zaber.Stop(PortName=ZaberMotor, Device=0, Axis=nil) => #1
            #0 -> AllenNeuralDynamics.Zaber.Stop(PortName=ZaberMotor, Device=1, Axis=nil) => #2
            #1, #2 -> Zip
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ManipulatorStop)
            -> MulticastSubject SoftwareEvents

        GroupWorkflow GoTo3dPosition => #13
            BehaviorSubject<OpenCV.Net.Point3d> GoTo3dPosition => #0
            -> MemberSelector(Selector=X) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator.XAxis)
            -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #4
            #1, #4 -> AllenNeuralDynamics.Zaber.MoveAbsolute => #5
              PortName=ZaberMotor
              Device=0
              Axis=1
              Velocity=nil
              Acceleration=nil
              Units=Length_Millimetres
              VelocityUnits=Velocity_MillimetresPerSecond
              AccelerationUnits=Acceleration_MillimetresPerSecondSquared
            #0 -> MemberSelector(Selector=Y) => #6
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator.YAxis)
            -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #9
            #6, #9 -> AllenNeuralDynamics.Zaber.MoveAbsolute => #10
              PortName=ZaberMotor
              Device=0
              Axis=2
              Velocity=nil
              Acceleration=nil
              Units=Length_Millimetres
              VelocityUnits=Velocity_MillimetresPerSecond
              AccelerationUnits=Acceleration_MillimetresPerSecondSquared
            #0 -> MemberSelector(Selector=Z) => #11
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator.ZAxis)
            -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #14
            #11, #14 -> AllenNeuralDynamics.Zaber.MoveAbsolute => #15
              PortName=ZaberMotor
              Device=1
              Axis=1
              Velocity=nil
              Acceleration=nil
              Units=Length_Millimetres
              VelocityUnits=Velocity_MillimetresPerSecond
              AccelerationUnits=Acceleration_MillimetresPerSecondSquared
            #5, #10, #15 -> Zip
            -> WorkflowOutput
        SubscribeSubject IsHomed
        -> Condition => #15
            WorkflowInput Source1
            -> WorkflowOutput
        #13, #15 -> SubscribeWhen

        GroupWorkflow SpoutAxisControl
            BehaviorSubject<System.Single> MoveSpoutAbsolute => #0
            SubscribeSubject ManipulatorSpoutAxis
            -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #3
            #0, #3 -> AllenNeuralDynamics.Zaber.MoveAbsolute => #4
              PortName=ZaberMotor
              Device=0
              Axis=1
              Velocity=nil
              Acceleration=nil
              Units=Length_Millimetres
              VelocityUnits=Velocity_MillimetresPerSecond
              AccelerationUnits=Acceleration_MillimetresPerSecondSquared
            SubscribeSubject IsHomed
            -> Condition => #6
                WorkflowInput Source1
                -> WorkflowOutput
            #4, #6 -> SubscribeWhen

            BehaviorSubject<System.Single> MoveSpoutVelocity => #8
            SubscribeSubject ManipulatorSpoutAxis
            -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #11
            #8, #11 -> AllenNeuralDynamics.Zaber.MoveVelocity => #12
              PortName=ZaberMotor
              Device=0
              Axis=0
              Acceleration=nil
              VelocityUnits=Velocity_MillimetresPerSecond
              AccelerationUnits=Acceleration_MillimetresPerSecondSquared
            SubscribeSubject IsHomed
            -> Condition => #14
                WorkflowInput Source1
                -> WorkflowOutput
            #12, #14 -> SubscribeWhen

            FloatProperty(Value=0)
            -> Take(Count=1)
            -> MulticastSubject MoveSpoutVelocity

            Timer(DueTime=PT0S, Period=PT0.02S) => #19
            SubscribeSubject ManipulatorSpoutAxis
            -> MemberSelector(Selector=Item2)
            -> PropertyMapping(Axis(Selector=AxisIndex), Device(Selector=DeviceIndex)) => #22
            #19, #22 -> AllenNeuralDynamics.Zaber.GetPosition(PortName=ZaberMotor, Device=0, Axis=0, Units=Length_Millimetres)
            -> BehaviorSubject SpoutPosition

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #11
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                #5, #8 -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1, Gamma=nil, PixelFormat=Mono8) => #9
                SubscribeSubject FrameEvent => #10
                #9, #10 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #12
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #14
                #12, #14 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Timer(DueTime=PT0S, Period=PT0.05S) => #24
            #22, #24 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1)
            -> Accumulate => #32
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #36
            #32, #36 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Delay(DueTime=PT0.2S)
            -> BehaviorSubject TriggeredCamerasReady

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #7
                SubscribeSubject HarpTimestampSource => #8
                #7, #8 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #10
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject MonitoringCamerasStream(BufferSize=nil)
            -> WorkflowOutput

GroupWorkflow OperationControl
    GroupWorkflow WaterValve
        SubscribeSubject HarpBehaviorEvents => #0
        Annotation Valve+Speaker(Text="") => #1
        #0, #1 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable="DOPort0 SupplyPort0 SupplyPort1 DO1 DO2"))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Double> ValveOpenTimeMs
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort1)
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=ValveOpenTime)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> MulticastSubject ValveOpenTimeMs

        BehaviorSubject<System.Reactive.Unit> TriggerValve
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
        -> MulticastSubject HarpBehaviorCommands
        -> WorkflowOutput

    GroupWorkflow Lickometer
        SubscribeSubject HarpBehaviorEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #2
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #6
        #6, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePokeInputFilterPayload(PokeInputFilter=1))
        -> MulticastSubject HarpBehaviorCommands

    GroupWorkflow Adc
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> PublishSubject AnalogData

        SubscribeSubject AnalogData
        -> MemberSelector(Selector="Value.AnalogInput0,Seconds")
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject BciSignal

    GroupWorkflow 2pHandShake
        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1) => #1
        ExternalizedMapping(Value(DisplayName=PulseDurationMs)) => #2
        #1, #2 -> IntProperty(Value=10) => #3
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2) => #4
        #3 -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDOPort0) => #5
        #4, #5 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1)
        -> Delay(DueTime=PT0.2S)
        -> Harp.Behavior.CreateMessage(MessageType=Read, Payload=Harp.Behavior.CreateDigitalInputStatePayload(DigitalInputState=None))
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #14
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> DistinctUntilChanged => #18
        #18, #14 -> WithLatestFrom
        -> MemberSelector(Selector="Item1,Item2.Seconds")
        -> Bonsai.Harp.CreateTimestamped
        -> BehaviorSubject MicroscopeArmed

        BehaviorSubject<System.Reactive.Unit> MicroscopeStart
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DO2))
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> MicroscopeStop
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
        -> MulticastSubject HarpBehaviorCommands

        Unit
        -> Take(Count=1)
        -> MulticastSubject MicroscopeStop

    GroupWorkflow Buzzer
        SubscribeSubject HarpBehaviorEvents
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO1Payload(PwmDutyCycleDO1=50))
        -> Take(Count=1)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioTrigger => #4
        Annotation TrialStart(Text="") => #5
        #4, #5 -> IncludeWorkflow(Path=Extensions\TriggerTone.bonsai, ToneId=1, Frequency=500, DurationMs=100) => #6
        Annotation Reward(Text="") => #7
        #4, #7 -> IncludeWorkflow(Path=Extensions\TriggerTone.bonsai, ToneId=2, Frequency=100, DurationMs=20) => #8
        #6, #8 -> Merge
        -> WorkflowOutput

    GroupWorkflow LoadCellProcessing
        SubscribeSubject LoadCellsData => #0
        -> MemberSelector(Selector=Value) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Operation.LoadCellIndex)
        -> PropertyMapping(Value) => #4
        #1, #4 -> Index(Operand=IntProperty(Value=0)) => #5
        #0 -> MemberSelector(Selector=Seconds) => #6
        #5, #6 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject LoadCellData

        SubscribeSubject LoadCellData => #10
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToDouble => #12
          Expression: double(it)
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=NoMovementPassiveControl)
        -> MemberSelector(Selector=LowPassCutOff)
        -> PropertyMapping(Cutoff1) => #16
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=NoMovementPassiveControl)
        -> MemberSelector(Selector=HighPassCutOff)
        -> PropertyMapping(Cutoff2) => #20
        #12, #16, #20 -> Bonsai.Dsp.FrequencyFilter(SampleRate=1000, Cutoff1=50, Cutoff2=0.001, KernelLength=60, FilterType=BandPass)
        -> Bonsai.Dsp.Abs => #22
        #10 -> MemberSelector(Selector=Seconds) => #23
        #22, #23 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject MovementSignal

        FloatProperty(Value=1000)
        -> Take(Count=1)
        -> AsyncSubject MovementSignalSamplingRate

    GroupWorkflow BciProcessing
        SubscribeSubject BciSignal => #0
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform AdcUnitsToVoltage => #2
          Expression: ((it * 5.0) / 3972.0)
        #0 -> MemberSelector(Selector=Seconds) => #3
        #2, #3 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject PostBciSignal

        FloatProperty(Value=1000)
        -> Take(Count=1)
        -> AsyncSubject BciSamplingRate

    GroupWorkflow BciModeToggling
        BooleanProperty(Value=true)
        -> Take(Count=1)
        -> BehaviorSubject BciModeEnabled

        SubscribeSubject BciModeEnabled => #3
        -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #6
        #3 -> Condition => #7
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=BciActiveControl.Gain) => #9
        #7, #9 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #11
        #6, #11 -> Merge
        -> MulticastSubject BciGain

        SubscribeSubject BciModeEnabled => #14
        -> BitwiseNot
        -> Condition => #16
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=NoMovementPassiveControl.Gain) => #18
        #16, #18 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #20
        #14 -> Condition => #21
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=BciPassiveControl.Gain) => #23
        #21, #23 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #25
        #20, #25 -> Merge
        -> MulticastSubject PassiveGain

        SubscribeSubject BciGain
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=BciGain)
        -> MulticastSubject SoftwareEvents

        SubscribeSubject PassiveGain
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=PassiveGain)
        -> MulticastSubject SoftwareEvents

        SubscribeSubject BciModeEnabled
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=BciModeEnabled)
        -> MulticastSubject SoftwareEvents

    GroupWorkflow SpoutControl => #8
        GroupWorkflow CalculateBounds
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=ManipulatorResetPosition) => #1
            SubscribeSubject ManipulatorSpoutAxis => #2
            #1, #2 -> CombineLatest
            -> Bonsai.Scripting.Expressions.ExpressionTransform GetResetAxisPosition
              Expression: it.Item1[it.Item2.Item1]
            -> BehaviorSubject SpoutClosePosition

            SubscribeSubject SpoutClosePosition => #6
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=FarPositionOffset)
            -> Bonsai.Dsp.Abs => #9
            #6, #9 -> CombineLatest
            -> Subtract
            -> BehaviorSubject SpoutFarPosition

        BehaviorSubject<System.Reactive.Unit> GoToInitialPosition => #1
        SubscribeSubject SpoutFarPosition => #2
        #1, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject MoveSpoutAbsolute
    SubscribeSubject Manipulator
    -> MemberSelector(Selector=IsOpen) => #10
    #8, #10 -> SubscribeWhen

GroupWorkflow HardwareChecks
    GroupWorkflow ProtocolValidation => #0
        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #2
        SubscribeSubject SubjectSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #4
        #2, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        GroupWorkflow CameraChecks
            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=FrameID)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #10
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable CheckCameraSettings
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value.Exposure) => #4
                SubscribeSubject TriggeredCameraController
                -> MemberSelector(Selector=FrameRate)
                -> MemberSelector(Selector=Value) => #7
                #4, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((1.0 / Item2) * 1000000) < double(Item1) + 1000
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #13
                #11, #13 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} exposure setting not compatible with requested frame rate!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!")

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.HasValue)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.ThrowException(Message="TriggeredCameraControl must specify a valid FrameRate property!")

            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable OnlineQC
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge => #4
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=Timestamp)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Multiply(Operand=DoubleProperty(Value=1E-09)) => #8
                #4 -> MemberSelector(Selector=Seconds)
                -> Bonsai.Dsp.Difference(Order=1) => #10
                #8, #10 -> Zip
                -> Subtract
                -> Bonsai.Dsp.Abs => #13
                ExternalizedMapping(Value(DisplayName=JitterThreshold)) => #14
                #13, #14 -> GreaterThan(Operand=DoubleProperty(Value=0.0005))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #17
                ExternalizedMapping(Period(DisplayName=SnoozeTime))
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT10S) => #19
                #17, #19 -> Gate
                -> SelectMany MakeUI
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it)
                    -> InputMapping(Text(Selector=it))
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="", Title=Warning, MessageBoxIcon=Exclamation)
            -> Merge

        SubscribeSubject ManipulatorSpoutAxis
        -> MemberSelector(Selector=Item2)
        -> MemberSelector(Selector=UpperLimit)
        -> MemberSelector(Selector=Value) => #13
        SubscribeSubject SpoutClosePosition => #14
        #13, #14 -> Zip
        -> Condition
            WorkflowInput Source1
            -> Equal
            -> BitwiseNot
            -> WorkflowOutput
        -> Format(Format="Max Spout limit: {0} not compatible with axis limit: {1}", Selector="Item2,Item1")
        -> InputMapping(Selector=it, Message(Selector=it))
        -> AllenNeuralDynamics.Core.ThrowException

        SubscribeSubject ManipulatorSpoutAxis
        -> MemberSelector(Selector=Item2)
        -> MemberSelector(Selector=LowerLimit)
        -> MemberSelector(Selector=Value) => #23
        SubscribeSubject SpoutFarPosition => #24
        #23, #24 -> Zip
        -> Condition
            WorkflowInput Source1
            -> GreaterThan
            -> WorkflowOutput
        -> Format(Format="Min Spout limit: {0} not compatible with axis limit: {1}", Selector="Item2,Item1")
        -> InputMapping(Selector=it, Message(Selector=it))
        -> AllenNeuralDynamics.Core.ThrowException
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> Delay(DueTime=PT2S)
    -> WorkflowOutput

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    SubscribeSubject SubjectSchema
    -> PropertyMapping(Subject(Selector=Subject), RootFolder(Selector=RootPath))
    -> IncludeWorkflow
      Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai
      RootFolder=C:\data\
      Subject=672102
      DateTimeOffset=0001-01-01T00:00:00.0000000+00:00
      SubjectName=LoggingRootPath
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=BciActiveControl.BaselineThreshold)
    -> BehaviorSubject BciBaselineThreshold

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=NoMovementPassiveControl.BaselineThreshold)
    -> BehaviorSubject NoMovementBaselineThreshold

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=BciActiveControl.Gain)
    -> BehaviorSubject BciGain

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=NoMovementPassiveControl.Gain)
    -> BehaviorSubject PassiveGain

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=Skip2pHandshake)
    -> BehaviorSubject Skip2pHandshake
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Skip2pHandshake)
    -> MulticastSubject SoftwareEvents

Defer TaskLogic => #10
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=InterTrialInterval)
    -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT0.5S, Period=PT0S)
    -> SelectMany SetPreTrial
        WorkflowInput Source1
        -> Unit
        -> Take(Count=1)
        -> MulticastSubject GoToInitialPosition
        -> WorkflowOutput

        Unit
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SetPreTrial)
        -> Take(Count=1)
        -> MulticastSubject SoftwareEvents
    -> SelectMany CheckBaseline => #6
        GroupWorkflow MovementBaseline
            SubscribeSubject MovementSignal => #0
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject NoMovementBaselineThreshold
            -> PropertyMapping(Value) => #3
            #1, #3 -> LessThan(Operand=DoubleProperty(Value=1000))
            -> DistinctUntilChanged => #5
            #0 -> MemberSelector(Selector=Seconds) => #6
            #5, #6 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped => #8
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=NoMovementTimeBeforeTrial)
            -> PropertyMapping(TimeBelowThreshold) => #11
            #8, #11 -> CreateObservable WaitBaseline
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject PostBciSignal
                -> MemberSelector(Selector=Seconds) => #4
                SubscribeSubject This
                -> MemberSelector(Selector=Seconds) => #6
                #4, #6 -> CombineLatest
                -> Subtract => #8
                ExternalizedMapping(Value(DisplayName=TimeBelowThreshold)) => #9
                #8, #9 -> GreaterThan(Operand=DoubleProperty(Value=0.5))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #12
                SubscribeSubject This
                -> MemberSelector(Selector=Value) => #14
                #12, #14 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Switch => #13
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=NoMovementTimeBeforeTrial)
            -> Equal(Operand=DoubleProperty(Value=0))
            -> Condition => #17
                WorkflowInput Source1
                -> WorkflowOutput
            #13, #17 -> Merge
            -> WorkflowOutput
        -> Condition BothBelow? => #1
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SuccessfulBaseline)
        -> MulticastSubject SoftwareEvents => #3
        #3, #1 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput

        Unit
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=CheckBaseline)
        -> Take(Count=1)
        -> MulticastSubject SoftwareEvents
    -> Condition WaitForMicroscope
        WorkflowInput Source1 => #0
        SubscribeSubject Skip2pHandshake
        -> BitwiseNot => #2
        #0, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> SelectMany StopMicroscope => #8
        Unit
        -> MulticastSubject MicroscopeStop
        -> Take(Count=1)
        -> WorkflowOutput
    Annotation todo?(Text='This delay is necessary since the microscope takes a while to "turn off"') => #9
    #8, #9 -> Delay(DueTime=PT2S)
    -> SelectMany WaitToStartMicroscope => #11
        SubscribeSubject MicroscopeArmed
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject MicroscopeStart => #3
        ExternalizedMapping(TimeOut(DisplayName=MicroscopeTimeOut)) => #4
        #3, #4 -> SelectMany WaitForMicoscope => #5
            SubscribeSubject MicroscopeArmed
            -> MemberSelector(Selector=Value)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=WaitMicroscopeTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds => #8
              Expression: TimeSpan.FromSeconds(it)
            ExternalizedMapping(Value(DisplayName=TimeOut)) => #9
            #8, #9 -> Add(Operand=TimeSpanProperty(Value=PT5S))
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT0S, Period=PT0S)
            -> AllenNeuralDynamics.Core.ThrowException(Message="Microscope is not responding!")
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=WaitMicroscopeTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0S, Period=PT0S) => #10
        #5, #10 -> Zip
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput

        Unit
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaitMicroscope)
        -> Take(Count=1)
        -> MulticastSubject SoftwareEvents
    #6 -> Condition Skip2pHandshake => #12
        WorkflowInput Source1 => #0
        SubscribeSubject Skip2pHandshake => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    #11, #12 -> Merge => #13
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=DelayAfterHandshake)
    -> PropertyMapping(DelayToStart) => #16
    #13, #16 -> SelectMany DelayStart
        SubscribeSubject BciSignal
        -> MemberSelector(Selector=Seconds)
        -> Take(Count=1) => #2
        SubscribeSubject BciSignal
        -> MemberSelector(Selector=Seconds) => #4
        #2, #4 -> CombineLatest
        -> Subtract
        -> Bonsai.Dsp.Abs => #7
        ExternalizedMapping(Value(DisplayName=DelayToStart)) => #8
        #7, #8 -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput

        Unit
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=DelayStart)
        -> Take(Count=1)
        -> MulticastSubject SoftwareEvents
    -> SelectMany Response => #18
        SubscribeSubject SpoutPosition => #0
        SubscribeSubject SpoutClosePosition
        -> PropertyMapping(Value) => #2
        #0, #2 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=39))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ResponseLocked)
        -> MulticastSubject SoftwareEvents
        -> Sink SetVelocityTo0 => #8
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject GateDisplacement
            -> FloatProperty(Value=0)
            -> MulticastSubject MoveSpoutVelocity
            -> WorkflowOutput
        SubscribeSubject SpoutClosePosition
        -> PropertyMapping(Value) => #10
        #8, #10 -> DoubleProperty(Value=39)
        -> MulticastSubject MoveSpoutAbsolute
        -> BooleanProperty(Value=true) => #13
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=MaxTrialDuration)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT20S, Period=PT0S)
        -> BooleanProperty(Value=false)
        -> Sink SetVelocityTo0 => #20
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject GateDisplacement
            -> FloatProperty(Value=0)
            -> MulticastSubject MoveSpoutVelocity
            -> WorkflowOutput
        #13, #20 -> Merge => #21
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ResponseOutcome)
        -> MulticastSubject SoftwareEvents => #23
        #23, #21 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput

        GroupWorkflow TriggerAudio
            IntProperty(Value=1)
            -> Take(Count=1)
            -> MulticastSubject AudioTrigger => #2
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=EnableSoundOnRewardZoneEntry)
            -> Condition => #5
                WorkflowInput Source1
                -> WorkflowOutput
            #2, #5 -> SubscribeWhen
            -> WorkflowOutput

        Annotation "Gain Notes"(Text="Considering the ADC is being acquired at 1kHz, the gain can be defined by considering a voltage of 1")
        -> SubscribeSubject PostBciSignal
        -> MemberSelector(Selector=Value) => #31
        SubscribeSubject BciGain => #32
        SubscribeSubject BciSamplingRate
        -> Bonsai.Scripting.Expressions.ExpressionTransform 1.0/it
          Expression: 1.0/it
        -> PropertyMapping(Value) => #35
        Annotation "Normalize to milliseconds"(Text="") => #36
        #32, #35, #36 -> Multiply(Operand=DoubleProperty(Value=0))
        -> PropertyMapping(RangeMax) => #38
        #31, #38 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0, RescaleType=Linear)
        -> Condition IsBciEnabled? => #40
            SubscribeSubject BciModeEnabled
            -> WorkflowOutput
        SubscribeSubject MovementSignal
        -> MemberSelector(Selector=Value) => #42
        SubscribeSubject PassiveGain => #43
        SubscribeSubject MovementSignalSamplingRate
        -> Bonsai.Scripting.Expressions.ExpressionTransform 1.0/it
          Expression: 1.0/it
        -> PropertyMapping(Value) => #46
        #43, #46 -> Multiply(Operand=DoubleProperty(Value=0))
        -> PropertyMapping(Value) => #48
        #42, #48 -> DoubleProperty(Value=0.002) => #49
        #40, #49 -> Merge
        -> Condition GateDisplacement
            SubscribeSubject GateDisplacement
            -> WorkflowOutput
        -> MulticastSubject MoveSpoutVelocity

        BooleanProperty(Value=true)
        -> BehaviorSubject GateDisplacement

        SubscribeSubject MovementSignal
        -> MemberSelector(Selector=Value) => #56
        SubscribeSubject NoMovementBaselineThreshold
        -> PropertyMapping(Value) => #58
        #56, #58 -> GreaterThan(Operand=DoubleProperty(Value=1000))
        -> DistinctUntilChanged
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject GateDisplacement
        -> CreateObservable WaitForFallingEdge
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=PunishOnMovementDuration)
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT0S, Period=PT0S) => #4
            SubscribeSubject MovementSignal
            -> MemberSelector(Selector=Value) => #6
            SubscribeSubject NoMovementBaselineThreshold
            -> PropertyMapping(Value) => #8
            #6, #8 -> GreaterThan(Operand=DoubleProperty(Value=1000))
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1) => #12
            #4, #12 -> SubscribeWhen
            -> WorkflowOutput
        -> Switch
        -> BooleanProperty(Value=true)
        -> MulticastSubject GateDisplacement
    -> Condition Success?
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany WaitForLick => #20
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=WaitForLick) => #1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany WaitForLick => #3
            SubscribeSubject LickEvent
            -> BooleanProperty(Value=true) => #1
            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=LickResponseTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT2S, Period=PT0S)
            -> BooleanProperty(Value=false) => #7
            #1, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickResponse)
        -> MulticastSubject SoftwareEvents => #5
        #5, #3 -> Zip
        -> MemberSelector(Selector=Item2) => #7
        #1 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #10
        #7, #10 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput

        IntProperty(Value=2)
        -> Take(Count=1)
        -> MulticastSubject AudioTrigger

        Unit
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaitForLick)
        -> MulticastSubject SoftwareEvents
    -> Condition IsLick
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany DeliverReward => #22
        WorkflowInput Source1
        -> Unit
        -> MulticastSubject TriggerValve => #2
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=RewardConsumeTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToSeconds
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #6
        #2, #6 -> Delay(DueTime=PT2S)
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput

        Unit
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Reward)
        -> MulticastSubject SoftwareEvents
    #20 -> BitwiseNot
    -> Condition IsTimeOut => #24
        WorkflowInput Source1
        -> WorkflowOutput
    #18 -> BitwiseNot
    -> Condition IsFail => #26
        WorkflowInput Source1
        -> WorkflowOutput
    #22, #24, #26 -> Merge
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialOutcome)
    -> MulticastSubject SoftwareEvents
    -> Take(Count=1)
    -> Repeat
SubscribeSubject EndExperiment => #11
#10, #11 -> TakeUntil => #12
SubscribeSubject StartExperiment => #13
#12, #13 -> SubscribeWhen

Defer Logging => #15
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow HarpLogging
            SubscribeSubject HarpBehaviorEvents
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Behavior, HarpDeviceName=Behavior)

            SubscribeSubject HarpClkGenEvents
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=ClockGenerator
              HarpDeviceName=TimestampGeneratorGen3

            SubscribeSubject HarpLoadCellsEvents
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=LoadCells, HarpDeviceName=LoadCells)

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpTimestampSource
            -> BehaviorSubject HarpSeconds

            SubscribeSubject HarpBehaviorCommands => #2
            SubscribeSubject HarpSeconds => #3
            #2, #3 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/Behavior
              HarpDeviceName=Behavior

            SubscribeSubject HarpClkGenCommands => #7
            SubscribeSubject HarpSeconds => #8
            #7, #8 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/ClockGenerator
              HarpDeviceName=TimestampGeneratorGen3

            SubscribeSubject HarpLoadCellsCommands => #12
            SubscribeSubject HarpSeconds => #13
            #12, #13 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil)
            -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/LoadCells
              HarpDeviceName=LoadCells

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvents
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
            #1, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=nil)
            -> WorkflowOutput

            GroupWorkflow Metadata
                SubscribeSubject Repository
                -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RepositoryStatus)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject RngSeedValue
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RngSeed)
                -> MulticastSubject SoftwareEvents

        GroupWorkflow OperationControl
            SubscribeSubject SpoutPosition => #0
            SubscribeSubject HarpTimestampSource => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, LogName=SpoutPosition, DeviceName=Operation)

            SubscribeSubject MoveSpoutVelocity => #5
            SubscribeSubject HarpTimestampSource => #6
            #5, #6 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, LogName=MoveSpoutVelocity, DeviceName=Operation)

            SubscribeSubject MoveSpoutAbsolute => #10
            SubscribeSubject HarpTimestampSource => #11
            #10, #11 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, LogName=MoveSpoutAbsolute, DeviceName=Operation)

    Defer BehaviorVideos
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=BehaviorVideos)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow TriggeredCameras
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> Merge => #3
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> BciNoMovementDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<BciNoMovementDataSchema.Rig.VideoWriterFfmpeg>) => #6
            #3 -> MemberSelector(Selector=Key) => #7
            #6, #7 -> WithLatestFrom
            -> CreateObservable FfmpegWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #10
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #13
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #15
                #10, #13, #15 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=BehaviorVideos
                  LogName=FaceCamera
                  VideoExtension=mp4
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #22
                  Expression:
                    new(
                    Seconds as ReferenceTime,
                    Value.ChunkData.FrameID as CameraFrameNumber,
                    Value.ChunkData.Timestamp as CameraFrameTime,
                    Value.Image as Image)
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #25
                #22, #25 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="ReferenceTime,CameraFrameNumber,CameraFrameTime")
                -> MemberSelector(Selector=Image) => #27
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video)) => #29
                SubscribeSubject ThisWriter
                -> PropertyMapping(FrameRate(Selector=FrameRate), OutputArguments(Selector=OutputArguments)) => #31
                #27, #29, #31 -> AllenNeuralDynamics.Core.FfmpegVideoWriter(Overwrite=false, FrameRate=0)
            -> Merge

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> Merge => #14
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> BciNoMovementDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<BciNoMovementDataSchema.Rig.VideoWriterOpenCv>) => #17
            #14 -> MemberSelector(Selector=Key) => #18
            #17, #18 -> WithLatestFrom
            -> CreateObservable OpenCvWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #10
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #13
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #15
                #10, #13, #15 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=BehaviorVideos
                  LogName=FaceCamera
                  VideoExtension=mp4
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #22
                  Expression:
                    new(
                    Seconds as ReferenceTime,
                    Value.ChunkData.FrameID as CameraFrameNumber,
                    Value.ChunkData.Timestamp as CameraFrameTime,
                    Value.Image as Image)
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #25
                #22, #25 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="ReferenceTime,CameraFrameNumber,CameraFrameTime")
                -> MemberSelector(Selector=Image) => #27
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video)) => #29
                SubscribeSubject ThisWriter
                -> PropertyMapping(FourCC(Selector=FourCc), FrameRate(Selector=FrameRate)) => #31
                #27, #29, #31 -> Bonsai.Vision.VideoWriter(Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
            -> Merge

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> MemberSelector(Selector=Cameras)
            -> Merge => #4
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> BciNoMovementDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<BciNoMovementDataSchema.Rig.VideoWriterFfmpeg>) => #7
            #4 -> MemberSelector(Selector=Key) => #8
            #7, #8 -> WithLatestFrom
            -> CreateObservable FfmpegWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #10
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #13
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #15
                #10, #13, #15 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=BehaviorVideos
                  LogName=FaceCamera
                  VideoExtension=mp4
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject MonitoringCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #22
                  Expression:
                    new(
                    Seconds as ReferenceTime,
                    Single.NaN as CameraFrameNumber,
                    Single.NaN as CameraFrameTime,
                    Value as Image)
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #25
                #22, #25 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="ReferenceTime,CameraFrameNumber,CameraFrameTime")
                -> MemberSelector(Selector=Image) => #27
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video)) => #29
                SubscribeSubject ThisWriter
                -> PropertyMapping(FrameRate(Selector=FrameRate), OutputArguments(Selector=OutputArguments)) => #31
                #27, #29, #31 -> AllenNeuralDynamics.Core.FfmpegVideoWriter(Overwrite=false, FrameRate=0)
            -> Merge

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> MemberSelector(Selector=Cameras)
            -> Merge => #16
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> BciNoMovementDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<BciNoMovementDataSchema.Rig.VideoWriterOpenCv>) => #19
            #16 -> MemberSelector(Selector=Key) => #20
            #19, #20 -> WithLatestFrom
            -> CreateObservable OpenCvWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #10
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #13
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #15
                #10, #13, #15 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=BehaviorVideos
                  LogName=FaceCamera
                  VideoExtension=mp4
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject MonitoringCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #22
                  Expression:
                    new(
                    Seconds as ReferenceTime,
                    Single.NaN as CameraFrameNumber,
                    Single.NaN as CameraFrameTime,
                    Value as Image)
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #25
                #22, #25 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="ReferenceTime,CameraFrameNumber,CameraFrameTime")
                -> MemberSelector(Selector=Image) => #27
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video)) => #29
                SubscribeSubject ThisWriter
                -> PropertyMapping(FourCC(Selector=FourCc), FrameRate(Selector=FrameRate)) => #31
                #27, #29, #31 -> Bonsai.Vision.VideoWriter(Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
            -> Merge

    Defer Other
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Other)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow ConfigSchemaLogging
            SubscribeSubject SubjectSchema
            -> GroupWorkflow ModifySchema
                WorkflowInput Source1
                -> BciNoMovementDataSchema.Session.SerializeToJson
                -> BciNoMovementDataSchema.Session.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.Session.AindBehaviorSessionModel>) => #2
                SubscribeSubject Repository
                -> MemberSelector(Selector=Head.Tip.Sha) => #4
                #2, #4 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionSink AddHash
                  Expression: it.Item1.set_CommitHash(it.Item2)
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> BciNoMovementDataSchema.Session.SerializeToJson => #2
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #4
            #2, #4 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=session_output)

            SubscribeSubject TaskLogicSchema
            -> GroupWorkflow ModifySchema
                WorkflowInput Source1
                -> BciNoMovementDataSchema.TaskLogic.SerializeToJson
                -> BciNoMovementDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.TaskLogic.BciNoMovementTaskLogic>) => #2
                -> MemberSelector(Selector=TaskParameters) => #3
                SubscribeSubject RngSeedValue => #4
                #3, #4 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionSink AddRngSeedValue
                  Expression: it.Item1.set_RngSeed(it.Item2)
                -> MemberSelector(Selector=Item1) => #7
                #2, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionSink SetTaskParameters
                  Expression: it.Item1.set_TaskParameters(it.Item2)
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> SelectMany PerSchema
                WorkflowInput Source1
                -> BciNoMovementDataSchema.TaskLogic.SerializeToJson => #1
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #3
                #1, #3 -> GroupWorkflow LogDataSchema
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Name(DisplayName=SubjectName))
                    -> SubscribeSubject LoggingRootPath => #2
                    ExternalizedMapping(Modality) => #3
                    #2, #3 -> AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=nil) => #4
                    ExternalizedMapping(Value(DisplayName=DeviceName))
                    -> StringProperty(Value=Config) => #6
                    ExternalizedMapping(Value(DisplayName=LogName))
                    -> StringProperty(Value=tasklogic_output) => #8
                    #4, #6, #8 -> Zip
                    -> Take(Count=1)
                    -> Format(Format={0}\{1}\{2}.json, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(Path) => #12
                    #0, #12 -> AllenNeuralDynamics.Core.JsonWriter(Suffix=None, Overwrite=true)
                    -> WorkflowOutput
                -> WorkflowOutput

            SubscribeSubject RigSchema
            -> BciNoMovementDataSchema.Rig.SerializeToJson => #10
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #12
            #10, #12 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_output)

            SubscribeSubject RawRigSchema => #14
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #16
            #14, #16 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_input, Extension=json)

            SubscribeSubject RawSessionSchema => #18
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #20
            #18, #20 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=session_input, Extension=json)

            SubscribeSubject RawTaskLogicSchema => #22
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #24
            #22, #24 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_input, Extension=json)

        GroupWorkflow Logs
            SubscribeSubject EndExperiment
            -> StringProperty(Value=ExperimentCompleted)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
            SubscribeSubject HarpTimestampSource => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
            -> AllenNeuralDynamics.AindBehaviorServices.DataTypes.SerializeToJson => #7
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #9
            #7, #9 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName="", LogName=endsession)
SubscribeSubject EndExperiment
-> Delay(DueTime=PT2S) => #17
#15, #17 -> TakeUntil => #18
SubscribeSubject StartLogging => #19
#18, #19 -> SubscribeWhen

BehaviorSubject<System.Reactive.Unit> EndExperiment
-> Delay(DueTime=PT2S)
-> SelectMany EndRoutine
    Unit
    -> Take(Count=1)
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Source) => #4
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #8
    SubscribeSubject CompoundRootPath
    -> MemberSelector(Selector=SessionPath) => #10
    #8, #10 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1, Item2")
    -> PropertyMapping(Destination) => #13
    #4, #13 -> AllenNeuralDynamics.Core.StartRobocopy => #14
      Source=C:/Data/test-subject/20231220T155230
      Destination=C:/DataRemote/test-subject/20231220T155230
      CreateLog=true
      Arguments="/E /DCOPY:DAT /R:100 /W:3 /tee"
      ProcessWindowStyle=Normal
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull => #17
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    #14, #17 -> SubscribeWhen
-> Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput

IntProperty(Value=0)
-> Visualizer
    GroupWorkflow ZaberGui
        SubscribeSubject IsHomed
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder ClosePosition(Enabled=true, Visible=true, Text=ClosePosition)
        -> Sink GoToClose
            WorkflowInput Source1
            -> GroupWorkflow GetReset3dPosition
                WorkflowInput Source1 => #0
                SubscribeSubject TaskLogicParameters
                -> MemberSelector(Selector=ManipulatorResetPosition) => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=0)
                -> WorkflowOutput
            -> MulticastSubject GoTo3dPosition
            -> GroupWorkflow ForceClosePosition
                WorkflowInput Source1 => #0
                SubscribeSubject SpoutClosePosition
                -> PropertyMapping(Value) => #2
                #0, #2 -> FloatProperty(Value=0)
                -> WorkflowOutput
            -> MulticastSubject MoveSpoutAbsolute
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        SubscribeSubject IsHomed
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder FarPosition(Enabled=true, Visible=true, Text=FastPosition)
        -> Sink GoToFar
            WorkflowInput Source1 => #0
            SubscribeSubject SpoutFarPosition
            -> PropertyMapping(Value) => #2
            #0, #2 -> FloatProperty(Value=0)
            -> MulticastSubject MoveSpoutAbsolute
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #9
        Bonsai.Gui.ButtonBuilder Home(Enabled=true, Visible=true, Text=Home)
        -> Sink Home!
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject HomingRoutine
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #12
        SubscribeSubject ParkState
        -> Bonsai.Scripting.Expressions.ExpressionTransform GenerateLabel
          Expression: it ? "Unpark" : "Park"
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ToggleButtonBuilder ParkUnpark(Enabled=true, Visible=true, Text="", Checked=false)
        -> MulticastSubject ParkState
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ToggleButtonVisualizer>) => #18
        #4, #9, #12, #18 -> Bonsai.Gui.TableLayoutPanelBuilder ManipulatorOperation(Enabled=true, Visible=true, ColumnCount=4, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #20
        Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Text=-X)
        -> Sink
            WorkflowInput Source1 => #0
            ExternalizedMapping(X, Y, Z) => #1
            #0, #1 -> Bonsai.Vision.CreatePoint3d(X=-1, Y=0, Z=0)
            -> MulticastSubject IncrementPositionBy
            -> WorkflowOutput
        -> VisualizerMapping => #23
        Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Text=+X)
        -> Sink
            WorkflowInput Source1 => #0
            ExternalizedMapping(X, Y, Z) => #1
            #0, #1 -> Bonsai.Vision.CreatePoint3d(X=1, Y=0, Z=0)
            -> MulticastSubject IncrementPositionBy
            -> WorkflowOutput
        -> VisualizerMapping => #26
        Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Text=-Y)
        -> Sink
            WorkflowInput Source1 => #0
            ExternalizedMapping(X, Y, Z) => #1
            #0, #1 -> Bonsai.Vision.CreatePoint3d(X=0, Y=-1, Z=0)
            -> MulticastSubject IncrementPositionBy
            -> WorkflowOutput
        -> VisualizerMapping => #29
        Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Text=+Y)
        -> Sink
            WorkflowInput Source1 => #0
            ExternalizedMapping(X, Y, Z) => #1
            #0, #1 -> Bonsai.Vision.CreatePoint3d(X=0, Y=1, Z=0)
            -> MulticastSubject IncrementPositionBy
            -> WorkflowOutput
        -> VisualizerMapping => #32
        Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Text=-Z)
        -> Sink
            WorkflowInput Source1 => #0
            ExternalizedMapping(X, Y, Z) => #1
            #0, #1 -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=-1)
            -> MulticastSubject IncrementPositionBy
            -> WorkflowOutput
        -> VisualizerMapping => #35
        Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Text=+Z)
        -> Sink
            WorkflowInput Source1 => #0
            ExternalizedMapping(X, Y, Z) => #1
            #0, #1 -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=-1)
            -> MulticastSubject IncrementPositionBy
            -> WorkflowOutput
        -> VisualizerMapping => #38
        #23, #26, #29, #32, #35, #38 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #40
        Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=false, ToolbarVisible=false, AutoRefresh=false)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #42
        Bonsai.Gui.ButtonBuilder SaveNewClosePosition(Enabled=true, Visible=true, Text=SaveNewClosePosition)
        -> BehaviorSubject SaveNewClosePosition
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #45
        #40, #42, #45 -> Bonsai.Gui.TableLayoutPanelBuilder ManipulatorPositionControl
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=3), CellSpan(ColumnSpan=1, RowSpan=4), CellSpan(ColumnSpan=1, RowSpan=1))
        -> VisualizerMapping => #47
        #20, #47 -> Bonsai.Gui.TabControlBuilder Manipulator(Enabled=true, Visible=true)
        -> WorkflowOutput

        ExternalizedMapping(Value(DisplayName=X))
        -> DoubleProperty(Value=1) => #51
        ExternalizedMapping(Value(DisplayName=Y))
        -> DoubleProperty(Value=1) => #53
        ExternalizedMapping(Value(DisplayName=Z))
        -> DoubleProperty(Value=0.1) => #55
        #51, #53, #55 -> CombineLatest
        -> InputMapping(X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
        -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=0)
        -> BehaviorSubject CurrentManipulatorDisplacements

        BehaviorSubject<OpenCV.Net.Point3d> IncrementPositionBy => #60
        SubscribeSubject CurrentManipulatorDisplacements => #61
        #60, #61 -> WithLatestFrom
        -> SelectMany ApplyGain
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.X * Item2.X as X,
                Item1.Y * Item2.Y as Y,
                Item1.Z * Item2.Z as Z)
            -> InputMapping(Selector=it, X(Selector=X), Y(Selector=Y), Z(Selector=Z))
            -> Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=0)
            -> WorkflowOutput
        -> SelectMany Increment
            WorkflowInput Source1 => #0
            SubscribeSubject GoTo3dPosition
            -> Take(Count=1) => #2
            #0, #2 -> Zip
            -> Add
            -> WorkflowOutput
        -> MulticastSubject GoTo3dPosition

        SubscribeSubject SaveNewClosePosition => #66
        SubscribeSubject GoTo3dPosition => #67
        #66, #67 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #69
        SubscribeSubject TaskLogicSchema
        -> BciNoMovementDataSchema.TaskLogic.SerializeToJson
        -> BciNoMovementDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<BciNoMovementDataSchema.TaskLogic.BciNoMovementTaskLogic>) => #72
        #69, #72 -> WithLatestFrom
        -> MemberSelector(Selector="Item2,Item1")
        -> ModifyManipulatorResetPosition
        -> MulticastSubject TaskLogicSchema
    -> VisualizerMapping => #1
    GroupWorkflow UILogic
        SubscribeSubject TaskRunningState
        -> BitwiseNot
        -> PropertyMapping(Enabled, Visible)
        -> Bonsai.Gui.ButtonBuilder StartSession(Enabled=true, Visible=true, Text="Start Session!")
        -> Sink SetTaskState
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject TaskRunningState
            -> WorkflowOutput
        -> VisualizerMapping => #5
        SubscribeSubject TaskRunningState
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder StopSession(Enabled=true, Visible=true, Text=StopSession)
        -> Sink StopSession
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject TaskRunningState
            -> WorkflowOutput
        -> VisualizerMapping => #10
        #5, #10 -> Bonsai.Gui.TableLayoutPanelBuilder StartStop(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #12
        SubscribeSubject BciModeEnabled
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? "Bci Mode Enabled" : "Movement Mode Enabled"
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ToggleButtonBuilder BciModeEnabled(Enabled=true, Visible=true, Text="", Checked=true)
        -> MulticastSubject BciModeEnabled
        -> VisualizerMapping
        -> Bonsai.Gui.TableLayoutPanelBuilder Modes(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #20
        #12, #20 -> Bonsai.Gui.TableLayoutPanelBuilder UILogic(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping => #3
    GroupWorkflow DataVisualization
        SubscribeSubject TriggeredCamerasStream
        -> Take(Count=1)
        -> AsyncSubject CameraStream

        SubscribeSubject PostBciSignal
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector=Value, SymbolType=None, LineWidth=2, CurveSettings="", Capacity=5000, Min=-0.5, Max=4)
        -> VisualizerMapping => #5
        SubscribeSubject MovementSignal => #6
        SubscribeSubject NoMovementBaselineThreshold => #7
        #6, #7 -> CombineLatest
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector=Item1.Seconds, ValueSelector="Item1.Value, Item2", SymbolType=None, LineWidth=2, CurveSettings="", Capacity=5000, Min=-20, Max=5000)
        -> VisualizerMapping => #10
        SubscribeSubject LoadCellData
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector=Value, SymbolType=None, LineWidth=2, CurveSettings="", Capacity=5000, Min=nil, Max=nil)
        -> VisualizerMapping => #13
        SubscribeSubject CameraStream
        -> Visualizer CameraVisualizer
            WorkflowInput Source1
            -> ReplaySubject ThisCameraStream(BufferSize=nil)

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=TriggeredCameraController)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it != null ? (it.Cameras.Count > 0) : false
            -> AsyncSubject TriggeredCamerasControllerExists

            SubscribeSubject RigSchema => #6
            SubscribeSubject TriggeredCamerasControllerExists
            -> Condition => #8
                WorkflowInput Source1
                -> WorkflowOutput
            #6, #8 -> SubscribeWhen
            -> MemberSelector(Selector=TriggeredCameraController)
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Keys)
            -> Bonsai.Dsp.ConvertToArray(Depth=nil)
            -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
            -> BehaviorSubject SelectedControllerCamera
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ListBoxDataSourceVisualizer>) => #16
            SubscribeSubject SelectedControllerCamera
            -> CreateObservable GetStream
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Camera

                SubscribeSubject ThisCameraStream => #3
                SubscribeSubject Camera
                -> PropertyMapping(Value) => #5
                #3, #5 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    ExternalizedMapping(Value) => #2
                    #1, #2 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> Switch
            -> MemberSelector(Selector=Value.Image)
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #21
            SubscribeSubject TriggeredCamerasControllerExists
            -> PropertyMapping(Enabled, Visible) => #23
            #16, #21, #23 -> Bonsai.Gui.TableLayoutPanelBuilder ControllerVisualization
              Enabled=true
              Visible=true
              ColumnCount=1
              RowCount=2
              ColumnStyles=""
              RowStyles(RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.9))
              CellSpans=""
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #16
        SubscribeSubject SoftwareEvents => #17
        SubscribeSubject HarpTimestampSource => #18
        #17, #18 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
        -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.SoftwareEventVisualizer>) => #22
        SubscribeSubject SpoutPosition => #23
        SubscribeSubject SpoutClosePosition => #24
        SubscribeSubject SpoutFarPosition => #25
        #23, #24, #25 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #27
          Expression: new(Item1 as Position, Item2 as Close, Item3 as Far)
        SubscribeSubject HarpTimestampSource => #28
        #27, #28 -> WithLatestFrom
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=ITem2
          ValueSelector="Item1.Position,Item1.Close,Item1.Far"
          SymbolType=None
          LineWidth=1
          CurveSettings=""
          Capacity=5000
          Min=nil
          Max=nil
        -> VisualizerMapping => #31
        #5, #10, #13, #16, #22, #31 -> Bonsai.Gui.TableLayoutPanelBuilder DataVisualization(Enabled=true, Visible=true, ColumnCount=2, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping => #5
    #1, #3, #5 -> Bonsai.Gui.TableLayoutPanelBuilder Visualizer
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.2), RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.7))
      CellSpans=""
    -> WorkflowOutput
